CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "cell")
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    Name to assign these objects:cell
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "Tubulin")
    Name to assign these images:Tubulin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageAreaOccupied:[module_num:5|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
    Measure the area occupied by:Objects
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    Select object sets to measure:cell

MeasureObjectNeighbors:[module_num:6|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
    Select objects to measure:cell
    Select neighboring objects to measure:cell
    Method to determine neighbors:Within a specified distance
    Neighbor distance:10
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:7|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
    Select objects to measure:cell
    Select neighboring objects to measure:cell
    Method to determine neighbors:Within a specified distance
    Neighbor distance:50
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:cell
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:Tubulin
    Select objects to measure:cell

MeasureTexture:[module_num:10|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
    Select images to measure:Tubulin
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:7

MeasureGranularity:[module_num:11|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
    Select images to measure:Tubulin
    Measure within objects?:Yes
    Select objects to measure:cell
    Subsampling factor for granularity measurements:1
    Subsampling factor for background reduction:1
    Radius of structuring element:8
    Range of the granular spectrum:4

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|D:\\letitia\\CP
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Expt_
    Overwrite existing files without warning?:Yes
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